hardware:
  usbnicard:
    module.Class: ni_usb_6x_series.NationalInstrumentsUSB6000x
    laser_ao_channel: /Dev2/AO0
    laser_ao_voltage_range:
    - 0
    - 10
  simpledatadummy:
    module.Class: simple_data_dummy.SimpleDummy
  mw_source_srssg:
    module.Class: microwave.mw_source_srssg.MicrowaveSRSSG
    gpib_address: GPIB0::22::INSTR
    gpib_timeout: 10
  microwave_dummy:
    module.Class: microwave.mw_source_dummy.MicrowaveDummy
    gpib_address: dummy
    gpib_timeout: 20
  mydummyscanner:
    module.Class: confocal_scanner_dummy.ConfocalScannerDummy
    clock_frequency: 100
    connect:
      fitlogic: fitlogic
  nicard_6343_instreamer:
    module.Class: ni_x_series_in_streamer.NIXSeriesInStreamer
    device_name: Dev1
    digital_sources:
    - PFI0
    adc_voltage_range:
    - -10
    - 10
    max_channel_samples_buffer: 10000000
    read_write_timeout: 10
  mydummycounter:
    module.Class: slow_counter_dummy.SlowCounterDummy
    source_channels: 4
    clock_frequency: 100
    count_distribution: dark_bright_poisson
    remoteaccess: true
  mydummyodmrcounter:
    module.Class: odmr_counter_dummy.ODMRCounterDummy
    clock_frequency: 100
    number_of_channels: 3
    connect:
      fitlogic: fitlogic
  mydummyfastcounter:
    module.Class: fast_counter_dummy.FastCounterDummy
  mydummypulser:
    module.Class: pulser_dummy.PulserDummy
  mydummywavemeter:
    module.Class: wavemeter_dummy.WavemeterDummy
    measurement_timing: 10
  mydummyswitch1:
    module.Class: switches.switch_dummy.SwitchDummy
    name: First
    remember_states: true
    switches:
      one:
      - down
      - up
      two:
      - down
      - up
      three:
      - low
      - middle
      - high
  mydummyswitch2:
    module.Class: switches.switch_dummy.SwitchDummy
    name: Second
    remember_states: true
    switches:
      An even longer name of the switch itself:
      - Very long name of a random state
      - Another very long name of a random state
  myspectrometer:
    module.Class: spectrometer.spectrometer_dummy.SpectrometerInterfaceDummy
    connect:
      fitlogic: fitlogic
  motordummy:
    module.Class: motor.motor_dummy.MotorDummy
  magnetdummy:
    module.Class: magnet.magnet_dummy.MagnetDummy
  processdummy:
    module.Class: process_dummy.ProcessDummy
  laserdummy:
    module.Class: laser.simple_laser_dummy.SimpleLaserDummy
  cameradummy:
    module.Class: camera.camera_dummy.CameraDummy
  mynicard:
    module.Class: national_instruments_x_series.NationalInstrumentsXSeries
    clock_channel: /Dev1/Ctr0
    scanner_clock_channel: /Dev1/Ctr3
    photon_sources:
    - /Dev1/PFI0
    - /Dev1/PFI12
    counter_channels:
    - /Dev1/Ctr1
    - /Dev1/Ctr2
    scanner_counter_channels:
    - /Dev1/Ctr2
    scanner_ai_channels:
    - /Dev1/AI0
    scanner_ao_channels:
    - /Dev1/AO0
    - /Dev1/AO1
    - /Dev1/AO2
    - /Dev1/AO3
    scanner_position_ranges:
    - - 0.0
      - 4e-05
    - - 0.0
      - 4e-05
    - - -1.2e-05
      - 1.2e-05
    - - 0
      - 10
    scanner_voltage_ranges:
    - - 0
      - 10
    - - 0
      - 10
    - - 0
      - 10
    - - 0
      - 10
    default_samples_number: 10
    default_clock_frequency: 100
    default_scanner_clock_frequency: 100
    gate_in_channel: /Dev1/PFI9
    counting_edge_rising: true
    odmr_trigger_channel: /Dev1/PFI15
gui:
  tray:
    module.Class: trayicon.TrayIcon
  man:
    module.Class: manager.managergui.ManagerGui
  timeseries:
    module.Class: time_series.time_series_gui.TimeSeriesGui
    connect:
      _time_series_logic_con: timeserieslogic
  confocal:
    module.Class: confocal.confocalgui.ConfocalGui
    connect:
      confocallogic1: scannerlogic
      savelogic: savelogic
      optimizerlogic1: optimizerlogic
    fixed_aspect_ratio_xy: true
    fixed_aspect_ratio_depth: true
    slider_stepsize: 0.001
    image_x_padding: 0.02
    image_y_padding: 0.02
    image_z_padding: 0.02
    default_meter_prefix: u
  poimanager:
    module.Class: poimanager.poimangui.PoiManagerGui
    connect:
      poimanagerlogic: poimanagerlogic
      scannerlogic: scannerlogic
  odmr:
    module.Class: odmr.odmrgui.ODMRGui
    connect:
      odmrlogic1: odmrlogic
      savelogic: savelogic
  wavemeterlogger:
    module.Class: wavemeterlogger.wavemeterloggui.WavemeterLogGui
    connect:
      wavemeterloggerlogic1: wavemeterloggerlogic
      savelogic: savelogic
  switches:
    module.Class: switch.switch_gui.SwitchGui
    connect:
      switchlogic: switchlogic
  taskrunner:
    module.Class: taskrunner.taskgui.TaskGui
    connect:
      tasklogic: tasklogic
  automation:
    module.Class: automation.automationgui.AutomationGui
    connect:
      automationlogic: automationlogic
  spectrometer:
    module.Class: spectrometer.spectrometergui.SpectrometerGui
    connect:
      spectrumlogic: spectrumlogic
  pulsedmeasurement:
    module.Class: pulsed.pulsed_maingui.PulsedMeasurementGui
    connect:
      pulsedmasterlogic: pulsedmasterlogic
  simpledata:
    module.Class: simpledatagui.simpledatagui.SimpleDataGui
    connect:
      simplelogic: simpledatalogic
  magnet:
    module.Class: magnet.magnet_gui.MagnetGui
    connect:
      magnetlogic1: magnet_logic
      savelogic: savelogic
  gatedcounter:
    module.Class: gated_counter.gated_counter_gui.GatedCounterGui
    connect:
      gatedcounterlogic1: gatedcounterlogic
      traceanalysislogic1: trace_analysis_logic
  pidcontrol:
    module.Class: pidgui.pidgui.PIDGui
    connect:
      pidlogic: pidlogic
  errortest:
    module.Class: testgui.TestGui
    text: Random text from config
    error: This config is required!
  qdplotter:
    module.Class: qdplotter.qdplotter_gui.QDPlotterGui
    pen_color_list:
    - b
    - y
    - m
    - g
    connect:
      qdplot_logic: qdplotlogic
  nuclearops:
    module.Class: nuclear_operations.nuclear_operations.NuclearOperationsGui
    connect:
      nuclearoperationslogic: nuopslogic
      savelogic: savelogic
  laser:
    module.Class: laser.laser.LaserGUI
    connect:
      laserlogic: laserlogic
  laserscanner:
    module.Class: laserscanner.laserscannergui.VoltScanGui
    connect:
      voltagescannerlogic1: laserscannerlogic
      savelogic: savelogic
  odmrgui_program_trigger:
    module.Class: odmr.odmrgui.ODMRGui
    connect:
      odmrlogic1: odmrlogic2
      savelogic: savelogic
  camera_gui:
    module.Class: camera.cameragui.CameraGUI
    connect:
      camera_logic: camera_logic
      savelogic: savelogic
  counter:
    module.Class: counter.countergui.CounterGui
    connect:
      counterlogic1: counterlogic
  nv_calculator_gui:
    module.Class: nv_calculator.nv_calculatorgui.NVCalculatorGui
    connect:
      nv_calculatorlogic: nv_calculator_logic
logic:
  timeserieslogic:
    module.Class: time_series_reader_logic.TimeSeriesReaderLogic
    max_frame_rate: 20
    connect:
      _streamer_con: nicard_6343_instreamer
      _savelogic_con: savelogic
  simpledatalogic:
    module.Class: simple_data_logic.SimpleDataLogic
    connect:
      simpledata: simpledatadummy
  softpid:
    module.Class: software_pid_controller.SoftPIDController
    connect:
      process: processdummy
      control: processdummy
  pidlogic:
    module.Class: pid_logic.PIDLogic
    timestep: 0.1
    connect:
      controller: softpid
      savelogic: savelogic
  kernellogic:
    module.Class: jupyterkernel.kernellogic.QudiKernelLogic
    remoteaccess: true
  pulsedmasterlogic:
    module.Class: pulsed.pulsed_master_logic.PulsedMasterLogic
    connect:
      pulsedmeasurementlogic: pulsedmeasurementlogic
      sequencegeneratorlogic: sequencegeneratorlogic
  sequencegeneratorlogic:
    module.Class: pulsed.sequence_generator_logic.SequenceGeneratorLogic
    connect:
      pulsegenerator: mydummypulser
  pulsedmeasurementlogic:
    module.Class: pulsed.pulsed_measurement_logic.PulsedMeasurementLogic
    raw_data_save_type: text
    connect:
      fastcounter: mydummyfastcounter
      pulsegenerator: mydummypulser
      fitlogic: fitlogic
      savelogic: savelogic
      microwave: microwave_dummy
  counterlogic:
    module.Class: counter_logic.CounterLogic
    connect:
      counter1: mynicard
      savelogic: savelogic
  gatedcounterlogic:
    module.Class: counter_logic.CounterLogic
    connect:
      counter1: mydummycounter
      savelogic: savelogic
  wavemeterloggerlogic:
    module.Class: wavemeter_logger_logic.WavemeterLoggerLogic
    logic_acquisition_timing: 20
    logic_update_timing: 100
    connect:
      wavemeter1: mydummywavemeter
      savelogic: savelogic
      counterlogic: counterlogic
      fitlogic: fitlogic
  switchlogic:
    module.Class: switch_logic.SwitchLogic
    watchdog_interval: 1
    autostart_watchdog: true
    connect:
      switch: switchinterfuse
  switchinterfuse:
    module.Class: interfuse.switch_combiner_interfuse.SwitchCombinerInterfuse
    connect:
      switch1: mydummyswitch1
      switch2: mydummyswitch2
    extend_hardware_name: true
  scannerlogic:
    module.Class: confocal_logic.ConfocalLogic
    connect:
      confocalscanner1: scanner_tilt_interfuse
      savelogic: savelogic
  scanner_tilt_interfuse:
    module.Class: interfuse.scanner_tilt_interfuse.ScannerTiltInterfuse
    connect:
      confocalscanner1: mynicard
  optimizerlogic:
    module.Class: optimizer_logic.OptimizerLogic
    connect:
      confocalscanner1: scanner_tilt_interfuse
      fitlogic: fitlogic
  poimanagerlogic:
    module.Class: poi_manager_logic.PoiManagerLogic
    connect:
      scannerlogic: scannerlogic
      optimiserlogic: optimizerlogic
      savelogic: savelogic
  odmrlogic:
    module.Class: odmr_logic.ODMRLogic
    connect:
      odmrcounter: mynicard
      fitlogic: fitlogic
      microwave1: mw_source_srssg
      savelogic: savelogic
      taskrunner: tasklogic
  odmr_counter_microwave_interfuse:
    module.Class: interfuse.odmr_counter_microwave_interfuse.ODMRCounterMicrowaveInterfuse
    connect:
      slowcounter: mydummycounter
      microwave: microwave_dummy
  odmrlogic2:
    module.Class: odmr_logic.ODMRLogic
    connect:
      odmrcounter: odmr_counter_microwave_interfuse
      fitlogic: fitlogic
      microwave1: odmr_counter_microwave_interfuse
      savelogic: savelogic
      taskrunner: tasklogic
    scanmode: LIST
  laserscannerlogic:
    module.Class: laser_scanner_logic.LaserScannerLogic
    connect:
      confocalscanner1: mydummyscanner
      savelogic: savelogic
  fitlogic:
    module.Class: fit_logic.FitLogic
  tasklogic:
    module.Class: taskrunner.TaskRunner
    tasks:
      scannerLocationRefocus:
        module: refocus
        pausetasks:
        - scan
        - odmr
        needsmodules:
          optimizer: optimizerlogic
  automationlogic:
    module.Class: automation.AutomationLogic
    connect:
      taskrunner: tasklogic
  savelogic:
    module.Class: save_logic.SaveLogic
    win_data_directory: C:/Data
    unix_data_directory: Data/
    log_into_daily_directory: true
    save_pdf: true
    save_png: true
  spectrumlogic:
    module.Class: spectrum.SpectrumLogic
    connect:
      spectrometer: myspectrometer
      savelogic: savelogic
      odmrlogic: odmrlogic
      fitlogic: fitlogic
  magnet_logic:
    module.Class: magnet_logic.MagnetLogic
    connect:
      magnetstage: magnetdummy
      optimizerlogic: optimizerlogic
      counterlogic: counterlogic
      odmrlogic: odmrlogic
      savelogic: savelogic
      scannerlogic: scannerlogic
      traceanalysis: trace_analysis_logic
      gatedcounterlogic: gatedcounterlogic
      sequencegeneratorlogic: sequencegeneratorlogic
  magnet_motor_interfuse:
    module.Class: interfuse.magnet_motor_interfuse.MagnetMotorInterfuse
    connect:
      motorstage: motordummy
  trace_analysis_logic:
    module.Class: trace_analysis_logic.TraceAnalysisLogic
    connect:
      counterlogic1: gatedcounterlogic
      savelogic: savelogic
      fitlogic: fitlogic
  qdplotlogic:
    module.Class: qdplot_logic.QDPlotLogic
    default_plot_number: 3
    connect:
      save_logic: savelogic
      fit_logic: fitlogic
  nuopslogic:
    module.Class: nuclear_operations_logic.NuclearOperationsLogic
    connect:
      sequencegenerationlogic: sequencegeneratorlogic
      traceanalysislogic: trace_analysis_logic
      gatedcounterlogic: gatedcounterlogic
      odmrlogic: odmrlogic
      optimizerlogic: optimizerlogic
      scannerlogic: scannerlogic
      savelogic: savelogic
  laserlogic:
    module.Class: laser_logic.LaserLogic
    connect:
      laser: laserdummy
  camera_logic:
    module.Class: camera_logic.CameraLogic
    connect:
      hardware: cameradummy
      savelogic: savelogic
  nv_calculator_logic:
    module.Class: nv_calculator_logic.NVCalculatorLogic
    connect:
      odmr: odmrlogic
      pulsed: pulsedmeasurementlogic
global:
  startup:
  - man
  - tray
  - tasklogic
  module_server:
    address: localhost
    port: 12345
  stylesheet: qdark.qss
