hardware:
  mynicard:
    module.Class: national_instruments_px_scan.NationalInstrumentsXSeriesPxScan
    photon_sources:
        - /Dev1/PFI0
    counter_clock: 100kHzTimebase
    counter_channels:
        - /Dev1/Ctr0
    counter_ai_channels:
        - /Dev1/AI10
    counter_voltage_range: [-10, 10]
    sample_scanner_ao_channels:
        - /Dev1/AO0
        - /Dev1/AO1
    tip_scanner_ao_channels:
        - /Dev1/AO2
        - /Dev1/AO3
    sample_scanner_ai_channels:
        - /Dev1/AI0
    sample_scanner_counter_channels:
        - /Dev1/Ctr0
    tip_scanner_ai_channels:
        - /Dev1/AI2
    tip_scanner_counter_channels:
        - /Dev1/Ctr1
    sample_scanner_voltage_ranges:
        - [0, 3]
        - [0, 3]
    tip_scanner_voltage_ranges:
        - [0, 3]
        - [0, 3]
    sample_scanner_position_ranges:
        - [0e-6, 40e-6]
        - [0e-6, 40e-6]
    tip_scanner_position_ranges:
        - [0e-6, 40e-6]
        - [0e-6, 40e-6]
    default_samples_number: 50
    max_counts: 3e7
    read_write_timeout: 10
    counting_edge_rising: True
gui:
  tray:
    module.Class: trayicon.TrayIcon
  man:
    module.Class: manager.managergui.ManagerGui
  taskrunner:
    module.Class: taskrunner.taskgui.TaskGui
    connect:
      tasklogic: tasklogic
  errortest:
    module.Class: testgui.TestGui
    text: Random text from config
    error: This config is required!
  afmcfmgui:
     module.Class: confocal.afm_confocal_test.ConfocalTestGui
logic:
  kernellogic:
    module.Class: jupyterkernel.kernellogic.QudiKernelLogic
    remoteaccess: true
  savelogic:
    module.Class: save_logic.SaveLogic
    win_data_directory: C:/Data
    unix_data_directory: Data/
    log_into_daily_directory: true
    save_pdf: true
    save_png: true
global:
  startup:
  - man
  - tray
  module_server:
    address: localhost
    port: 12345
  stylesheet: qdark.qss
