-global:
  startup: ['man', 'tray','taskrunner']

hardware:
  awg:
    module.Class: 'awg.spectrum_awg.spectrum_netbox.SpectrumNetbox'
    card_ip: 'TCPIP::10.90.14.211'
gui:
  tray:
    module.Class: 'trayicon.TrayIcon'
  man:
    module.Class: 'manager.managergui.ManagerGui'
  taskrunner:
    module.Class: 'taskrunner.taskgui.TaskGui'
    connect:
      tasklogic: 'tasklogic'
  errortest:
    module.Class: 'testgui.TestGui'
    text: 'Random text from config'
    error: 'This config is required!'

logic:
  kernellogic:
    module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
    remoteaccess: True
global:
  startup:
    - man
    - tray
  module_server:
    address: 'localhost'
    port: 12345
  stylesheet: qdark.qss