global:
  startup: ['man', 'tray','taskrunner']

hardware:
  mynicard:
     module.Class: 'national_instruments_px_scan.NationalInstrumentsXSeriesPxScan'
     motion_clock_channel: '/Dev1/Ctr3'
     default_motion_clock_frequency: 100
     photon_sources:
       - '/Dev1/PFI0'
     counter_clock: '100kHzTimebase'
     counter_channels:
       - '/Dev1/Ctr0'
     counter_ai_channels:
       - '/Dev1/AI0'
     counter_voltage_range: [-10, 10]
     sample_scanner_ao_channels:
       - '/Dev1/AO0'
       - '/Dev1/AO1'
     tip_scanner_ao_channels:
       - '/Dev1/AO2'
       - '/Dev1/AO3'
     sample_scanner_ai_channels:
       - '/Dev1/AI0'
     sample_scanner_counter_channels:
       - '/Dev1/Ctr0'
     tip_scanner_ai_channels:
       - '/Dev1/AI2'
     tip_scanner_counter_channels:
       - '/Dev1/Ctr1'
     sample_scanner_voltage_ranges:
       - [0, 3]
       - [0, 3]
     tip_scanner_voltage_ranges:
       - [0, 3]
       - [0, 3]
     sample_scanner_position_ranges:
       - [0, 40e-6]
       - [0, 40e-6]
     tip_scanner_position_ranges:
       - [0, 40e-6]
       - [0, 40e-6]
     default_samples_number: 50
     max_counts: 3e7
     read_write_timeout: 10
     counting_edge_rising: True
  odmrcounter:
     module.Class: 'odmr_counter_dummy.ODMRCounterDummy'
     connect:
       fitlogic: 'fitlogic'

  mw_source:
     module.Class: 'microwave.mw_source_srssg.MicrowaveSRSSG'
     gpib_address: 'GPIB0::22::INSTR'
     gpib_timeout: 10
gui:
  tray:
    module.Class: 'trayicon.TrayIcon'

  man:
    module.Class: 'manager.managergui.ManagerGui'

  taskrunner:
    module.Class: 'taskrunner.taskgui.TaskGui'
    connect:
      tasklogic: 'tasklogic'

  errortest:
    module.Class: 'testgui.TestGui'
    text: 'Random text from config'
    error: 'This config is required!'

  afmcfmgui:
     module.Class: 'snvm.snvm_gui.SnvmGui'
     connect:
       snvm_logic: 'snvmlogic'
       optimizer_logic: 'optimizerlogic'

logic:
  kernellogic:
    module.Class: 'jupyterkernel.kernellogic.QudiKernelLogic'
    remoteaccess: True
  savelogic:
    module.Class: 'save_logic.SaveLogic'
    win_data_directory: 'C:/Data'
    unix_data_directory: 'Data/'
    log_into_daily_directory: True
    save_pdf: True
    save_png: True
  fitlogic:
    module.Class: 'fit_logic.FitLogic'
  optimizerlogic:
    module.Class: 'optimizer_pxlogic.OptimizerLogicPxScan'
    optimizer_stack: 'tip'
    connect:
      fitlogic: 'fitlogic'
      scanner: 'mynicard'
  snvmlogic:
    module.Class: 'snvm_logic.SnvmLogic'
    connect:
      doublescanner: 'mynicard'
      #odmrscanner: 'mw_source'
      odmr_logic: 'odmrlogic'
  odmrlogic:
    module.Class: 'odmr_logic.OMDRPxLogic'
    connect:
      photon_counter: 'mynicard'
      fitlogic: 'fitlogic'
      mw_source: 'mw_source'

global:
  startup:
    - man
    - tray
  module_server:
    address: 'localhost'
    port: 12345
  stylesheet: qdark.qss
